PsychoPy2experiment version="2020.2.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = searchDisc4
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Routines
  Routine trial
    ImageComponent dispStimuli
      image [set every repeat] = $ImageFile
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      units = norm
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    KeyboardComponent key_resp_2
      allowedKeys = '1','2'
      correctAns = $correctAnswer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      storeCorrect = True
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  Routine break_2
    CodeComponent code
      Code Type = Both
      Begin Experiment:
        msg='doh'
        trialCounter=0
        accuracySum=0
        totRT=0
      Begin JS Experiment:
        msg = "";
        trialCounter=0;
        accuracySum=0;
        totRT=0;

        round = function(num, n=0) {
           return +(Math.round(num + ("e+" + n))  + ("e-" + n));
        }
      Begin JS Routine:
        trialCounter=trialCounter+1;

        if(key_resp_2.corr) {
            accuracySum = accuracySum + 1;
            totRT = totRT + key_resp_2.rt;
        }

        percentAccurate = accuracySum/trialCounter * 100;
        percentAccurate = round(percentAccurate, 3);
        meanRT = totRT/trialCounter;
        meanRT = round(meanRT, 3);

        msg = "You have completed " + trialCounter + " trials. You are " + percentAccurate + "% accurate so far, with an average reaction time of " + meanRT + "s. Press space bar to continue";
      Begin Routine:
        trialCounter = trialCounter + 1

        if key_resp_2.corr:
            accuracySum = accuracySum + 1
            totRT = totRT + key_resp_2.rt

        percentAccurate = accuracySum/trialCounter * 100
        percentAccurate = round(percentAccurate, 3)
        meanRT = totRT/trialCounter
        meanRT = round(meanRT, 3)

        #msg = "You have completed " + trialCounter + " trials. You are " + percentAccurate + "% accurate so far, with an average reaction time of " + meanRT + "s. Press space bar to continue"

        msg = "You have completed %i out of 570 trials. You are %i %% accurate so far, with an average reaction time of %.2f sec. Press space bar to continue." %(trialCounter,percentAccurate,meanRT)
      Each Frame:
        if trialCounter != 60 and trialCounter != 120 and trialCounter !=180 and trialCounter !=240 and trialCounter !=300 and trialCounter !=360 and trialCounter !=420:
            continueRoutine = False
      Each JS Frame:
        if ((trialCounter !== 60 && trialCounter !== 120 && trialCounter !== 180 && trialCounter !== 240 && trialCounter !== 300 && trialCounter !== 360 && trialCounter !== 420)) {
            continueRoutine = false;
        }
    TextComponent breakMessage
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    KeyboardComponent key_resp
      allowedKeys = 'space','return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine WelcomeScreen
    TextComponent text
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experimental trials.
        Be reminded that your task is to look for
        a white or a blue semicircle.
        If semicircle is facing left press '1'.
        If semicircle is facing right press '2'.
        Press SPACE bar to continue
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine WelcomePractice
    TextComponent text_2
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Welcome! Your task is to find
        white or blue semicircle and indicate
        if it is facing left or right.
        Press SPACE bar to continue.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine practiceTrials
    ImageComponent image
      image [set every repeat] = $ImageFile
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      units = norm
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    KeyboardComponent key_resp_4
      allowedKeys = '1','2'
      correctAns = $correctAnswer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      storeCorrect = True
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  Routine targetStimuli
    ImageComponent image_2
      image = targets/leftDisc.png
      pos = (-0.01,0.15)
      size = (0.05, 0.1)
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    TextComponent text_3
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        Press 1 if you see left semicircle


        Press 2 if you see right semicircle


        Press SPACE to start
    ImageComponent image_3
      image = targets/rightDisc.png
      pos = (0.01, -0.2)
      size = (0.05, 0.1)
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  Routine targetStimuli2
  Routine practiceFeedback
    CodeComponent code_2
      Code Type = Both
      Begin Experiment:
        msg='doh'
      Begin JS Experiment:
        msg = "doh";
        //manual_loop = 0;
      Begin JS Routine:
        console.log(key_resp_4.corr);

        if(key_resp_4.corr) {
            msg = "Correct!";
        } else {
            msg = "Oops, incorrect";
        }
      Begin Routine:
        if key_resp_4.corr:
            msg = "Correct!"
        else:
            msg = "Oops, incorrect"

        #if trials_2.thisTrialN == 0 or trials_2.thisTrialN % 19 != 0:
        #    continueRoutine = False


        #nCorr = trials_2.data['key_resp_4.corr'].sum() #.std(), .mean() also available
        #meanRt = trials_2.data['key_resp_4.rt'].mean()
        #msg = "You have completed 20 practice trials. You got %i trials correct (rt=%.2f). Press space bar to continue to main experiment." %(nCorr+1,meanRt)
      Each JS Frame:
        //if ((manual_loop !== 20)) {
        //    continueRoutine = false;
        //}

        //responses = psychoJS.experiment._trialsData  // get list of responses
        //nCorr = responses.reduce((a, b) => a + b['key_resp_4.corr'], 0)  // get sum
        //meanRT = responses.reduce((a, b) => a + b['key_resp_4.rt'], 0) / responses.length  // get mean

        //meanRT = round(meanRT, 3);
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $msg
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  Routine fixation
    PolygonComponent fix
      fillColor = $[1,1,1]
      shape = cross
      size = (0.03, 0.05)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
    TextComponent text_5
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Look at the fixation cross and press SPACE bar when you
        are ready to start the trial.
        Press '1' for semicircle facing left.
        Press '2' for semicircle facing right.
        You will first complete 20 practice trials.
        Press SPACE bar when you are ready to start.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fix2
    PolygonComponent fix2experiment
      fillColor = $[1,1,1]
      shape = cross
      size = (0.03, 0.05)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine consent1
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please read each statement carefully and click either SPACE to Agree and continue or ESC to disagree and terminate the experiment.
        Press SPACE to continue.
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine consent2
    TextComponent text_7
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        I understand that my participation in this project will involve looking for a target object on a computer screen and indicating what direction the target is facing, by pressing a computer keyboard buttons. This will require approximately 30min of my time.
        I understand that participation in this study is entirely voluntary and that I can withdraw from the study at any time without providing a reason by simply closing the browser or pressing esc button on your keyboard. I am aware that this will lead to loss of course credit or reimbursement. The incomplete data sets will not be saved.
        I understand that I can discuss any concerns with the experimenters before or after participating.
        This research is carried out by postdoctoral research fellow Dr Anna Nowakowska in the School of Psychology, University of Aberdeen under the supervision of lecturer Anna Hughes and lecturer Alasdair Clarke (Department of Psychology, University of Essex)
        Contact information:
        [a.nowakowska@abdn.ac.uk, anna.hughes@essex.ac.uk, a.clarke@essex.ac.uk]
        Press Space to Agree and continue.
        Press ESC button to disagree and terminate the experiment.
        Press SPACE to agree and continue.
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine consent3
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        I understand that the information provided by me will be held anonymously so that it is impossible to trace this information back to me individually. Information will be held on a secure server and may be retained indefinitely.
        To ensure access to the data for the wider research community, the anonymous dataset may be archived in an online repository (e.g., the Open Science Framework, https://osf.io/) or send to other researchers upon request for inspection.
        Press Space to Agree and continue.
        Press ESC button to disagree and terminate the experiment.
    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine consent4
    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        I confirm that the purpose, participation information, and data storage of this research have been sufficiently explained.
        I understand that at the end of the experiment I will be provided with additional information about the purpose of this research.
        Press SPACE to agree and continue to the experiment.
        Press ESC button to disagree and terminate the experiment.
    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine consent1
  Routine consent2
  Routine consent3
  Routine consent4
  Routine WelcomePractice
  Routine instructions
  Routine targetStimuli
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = image_stimuli_practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ImageFile', 'Practice arrays/exp1a_trial_0_colour1_distractors1_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'Practice arrays/exp1a_trial_3_colour1_distractors19_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'Practice arrays/exp1a_trial_5_colour1_distractors43_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'Practice arrays/exp1a_trial_7_colour2_distractors4_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'Practice arrays/exp1a_trial_8_colour2_distractors9_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'Practice arrays/exp1a_trial_10_colour2_distractors31_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'Practice arrays/exp1a_trial_12_colour3_distractors1_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'Practice arrays/exp1a_trial_13_colour3_distractors4_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'Practice arrays/exp1a_trial_16_colour3_distractors31_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'Practice arrays/exp1a_trial_19_colour1_distractors4_l.png'), ('targ_side', 'l'), ('correctAnswer', 1)]),
      OrderedDict([('ImageFile', 'Practice arrays/exp1a_trial_20_colour1_distractors9_l.png'), ('targ_side', 'l'), ('correctAnswer', 1)])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
    Routine fixation
    Routine practiceTrials
    Routine practiceFeedback
  LoopTerminator trials_2
  Routine WelcomeScreen
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Images_List.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ImageFile', 'Images/exp1a_trial_0_colour1_distractors1_r.png'), ('targ_side', 'r'), ('correctAnswer', 2), ('exp', '1a'), ('trial', 0), ('colour', 1), ('distNo', 1)]),
      OrderedDict([('ImageFile', 'Images/exp1a_trial_1_colour1_distractors4_r.png'), ('targ_side', 'r'), ('correctAnswer', 2), ('exp', '1a'), ('trial', 1), ('colour', 1), ('distNo', 4)]),
      OrderedDict([('ImageFile', 'Images/exp1a_trial_2_colour1_distractors9_r.png'), ('targ_side', 'r'), ('correctAnswer', 2), ('exp', '1a'), ('trial', 2), ('colour', 1), ('distNo', 9)]),
      OrderedDict([('ImageFile', 'Images/exp1a_trial_3_colour1_distractors19_r.png'), ('targ_side', 'r'), ('correctAnswer', 2), ('exp', '1a'), ('trial', 3), ('colour', 1), ('distNo', 19)]),
      OrderedDict([('ImageFile', 'Images/exp1a_trial_4_colour1_distractors31_r.png'), ('targ_side', 'r'), ('correctAnswer', 2), ('exp', '1a'), ('trial', 4), ('colour', 1), ('distNo', 31)]),
      OrderedDict([('ImageFile', 'Images/exp1a_trial_5_colour1_distractors43_r.png'), ('targ_side', 'r'), ('correctAnswer', 2), ('exp', '1a'), ('trial', 5), ('colour', 1), ('distNo', 43)]),
      OrderedDict([('ImageFile', 'Images/exp1a_trial_6_colour2_distractors1_r.png'), ('targ_side', 'r'), ('correctAnswer', 2), ('exp', '1a'), ('trial', 6), ('colour', 2), ('distNo', 1)]),
      OrderedDict([('ImageFile', 'Images/exp1a_trial_7_colour2_distractors4_r.png'), ('targ_side', 'r'), ('correctAnswer', 2), ('exp', '1a'), ('trial', 7), ('colour', 2), ('distNo', 4)])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
    Routine fix2
    Routine trial
    Routine break_2
  LoopTerminator trials
